PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = MBP_Monitor
  Save excel file = True
  Screen = 1
  Units = height
  Use version = latest
  Window size (pixels) = [1680, 1050]
  expName = Stroop 6-20-19
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Routines
  Routine Trial
    TextComponent fix
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [time (s)] = 1.5
      text = +
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    TextComponent Stroop_Text
      color [set every repeat] = $StroopColor
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 1.5
      text [set every repeat] = $StroopText
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.5
      store = nothing
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    MicrophoneComponent mic_1
      channel = 0
      saveStartStop = False
      startVal [time (s)] = 1.5
      stereo = False
      stopVal [duration (s)] = 3.5
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    TextComponent practice_cue_txt
      letterHeight = 0.05
      pos = (0,-0.4)
      saveStartStop = False
      startVal [time (s)] = 2.5
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      text [set every repeat]:
        $practice_cue
    TextComponent prac_cont
      letterHeight = 0.05
      pos = (0,-0.45)
      saveStartStop = False
      startVal [time (s)] = 2.5
      text [set every repeat] = $practice_cont
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  Routine full_instr
    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Good work!

        Now we will begin the full task
    KeyboardComponent full_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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  Routine instr
    TextComponent Stroop_Instr
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
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    KeyboardComponent Ready
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent cont
      letterHeight = 0.05
      pos = (0, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cont_text
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  Routine thanks
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Good work!

        You have completed this task.

        Press SPACE to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator Instructions loopType="TrialHandler"
    conditionsFile = SCWT_Instr.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('text', 'During this task, you will see three types of stimuli:\n        Colored asterisks\n        Color words written in black\n        Color words written in color'), ('cont_text', 'Press SPACE to continue.')]),
      OrderedDict([('index', 1), ('text', 'If you see a color word written in white...\n        Read the word.'), ('cont_text', 'Press SPACE to continue.')]),
      OrderedDict([('index', 2), ('text', 'If you see colored asterisks...\n        Name the color.'), ('cont_text', 'Press SPACE to continue.')]),
      OrderedDict([('index', 3), ('text', 'But, if you see a color word written in color...\n        Say the color that the word is written in. \n        DO NOT read the word.'), ('cont_text', 'Press SPACE to continue.')]),
      OrderedDict([('index', 4), ('text', 'So, if you see "Red" written in Blue, \n        Say "Blue".\n        Do NOT say "Red".\n \nLet’s practice.'), ('cont_text', 'Press SPACE to begin.')])]
    Routine instr
  LoopTerminator Instructions
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = SCWT_trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('StroopText', 'Orange'), ('StroopColor', 'white'), ('StroopCondition', 'Word'), ('correct', 'orange'), ('is_practice', 'yes'), ('practice_cue', '(Say "Orange")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 1), ('StroopText', 'Yellow'), ('StroopColor', 'green'), ('StroopCondition', 'CW'), ('correct', 'green'), ('is_practice', 'yes'), ('practice_cue', '(Say "Green")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 2), ('StroopText', '******'), ('StroopColor', 'purple'), ('StroopCondition', 'Color'), ('correct', 'purple'), ('is_practice', 'yes'), ('practice_cue', '(Say "Purple")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 3), ('StroopText', '*****'), ('StroopColor', 'green'), ('StroopCondition', 'Color'), ('correct', 'green'), ('is_practice', 'yes'), ('practice_cue', '(Say "Green")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 4), ('StroopText', 'Orange'), ('StroopColor', 'blue'), ('StroopCondition', 'CW'), ('correct', 'blue'), ('is_practice', 'yes'), ('practice_cue', '(Say "Blue")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 5), ('StroopText', 'Green'), ('StroopColor', 'purple'), ('StroopCondition', 'CW'), ('correct', 'purple'), ('is_practice', 'yes'), ('practice_cue', '(Say "Purple")'), ('practice_cont', 'Press SPACE to continue.')])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
    Routine Trial
  LoopTerminator Practice
  Routine full_instr
  LoopInitiator Trials loopType="TrialHandler"
    Selected rows = 18:78
    conditionsFile = SCWT_trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('StroopText', 'Orange'), ('StroopColor', 'white'), ('StroopCondition', 'Word'), ('correct', 'orange'), ('is_practice', 'yes'), ('practice_cue', '(Say "Orange")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 1), ('StroopText', 'Yellow'), ('StroopColor', 'green'), ('StroopCondition', 'CW'), ('correct', 'green'), ('is_practice', 'yes'), ('practice_cue', '(Say "Green")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 2), ('StroopText', '******'), ('StroopColor', 'purple'), ('StroopCondition', 'Color'), ('correct', 'purple'), ('is_practice', 'yes'), ('practice_cue', '(Say "Purple")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 3), ('StroopText', '*****'), ('StroopColor', 'green'), ('StroopCondition', 'Color'), ('correct', 'green'), ('is_practice', 'yes'), ('practice_cue', '(Say "Green")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 4), ('StroopText', 'Orange'), ('StroopColor', 'blue'), ('StroopCondition', 'CW'), ('correct', 'blue'), ('is_practice', 'yes'), ('practice_cue', '(Say "Blue")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 5), ('StroopText', 'Green'), ('StroopColor', 'purple'), ('StroopCondition', 'CW'), ('correct', 'purple'), ('is_practice', 'yes'), ('practice_cue', '(Say "Purple")'), ('practice_cont', 'Press SPACE to continue.')])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
    Routine Trial
  LoopTerminator Trials
  Routine thanks
