PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Stroop 6-20-19
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Routines
  Routine Instr_2
    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        If you see a color word written in white, read the word.

        Press SPACE to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instr_1
    TextComponent Stroop_Instr
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         During this task, you will see three types of stimuli: colored asterisks, color words written in black, and color words written in color.

        Press SPACE to continue.
    KeyboardComponent Ready
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr_3
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        But, if you see a color word written in color, say the color that the word is written in. Do not read the word.

        So, if you see "Red" written in Blue, you would say "Blue". You would not say "Red".

        Let’s practice.

        Press SPACE to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    TextComponent Stroop_Text
      color = $StroopColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $StroopText
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    MicrophoneComponent mic_1
      channel = 0
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 2.0
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    CodeComponent code
      Code Type = Py
  Routine Feedback
    CodeComponent msg
      Code Type = Py
      Begin Experiment:
        msg = ''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! Not quite."
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $msg
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  Routine Instr_4
Flow
  Routine Instr_1
  Routine Instr_2
  Routine Instr_3
  LoopInitiator Practice loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine Trial
    Routine Feedback
  LoopTerminator Practice
  Routine Instr_4
  LoopInitiator Trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Trial
  LoopTerminator Trials
