PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = MBP_Monitor
  Save excel file = True
  Screen = 1
  Units = height
  Use version = latest
  Window size (pixels) = [1440, 900]
  color = $[0,0,0]
  colorSpace = hsv
  expName = Stroop 6-20-19
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Routines
  Routine full_instr
    TextComponent full_instr_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Good work!

        Next we will begin the full task.

        On this part, you will not press SPACE.
        Items will appear one by one.

        Please respond quickly.
    KeyboardComponent full_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent full_instr_cont
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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  Routine instr
    TextComponent Stroop_Instr
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
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    KeyboardComponent Ready
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent cont
      letterHeight = 0.05
      pos = (0, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cont_text
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  Routine thanks
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Good work!

        You have completed this task.

        Press SPACE to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    TextComponent fixation_cross
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text = +
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  Routine prac_trial
    TextComponent Stroop_Text
      color [set every repeat] = $StroopColor
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $StroopText
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    KeyboardComponent prac_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent practice_cue_txt
      letterHeight = 0.05
      pos = (0,-0.4)
      saveStartStop = False
      startVal [time (s)] = 1
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      text [set every repeat]:
        $practice_cue
    TextComponent prac_cont
      letterHeight = 0.05
      pos = (0,-0.45)
      saveStartStop = False
      startVal [time (s)] = 1
      text [set every repeat] = $practice_cont
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    CodeComponent voicekey
      Code Type = Py
      Begin Experiment:
        # The import and pyo_init should always come early on:
        import psychopy.voicekey as vk
        vk.pyo_init(rate=44100, buffersize=256)

        # What signaler class to use? Here just the demo signaler:
        from psychopy.voicekey.demo_vks import DemoVoiceKeySignal as Signaler

        # To use a LabJack as a signaling device:
        #from voicekey.signal.labjack_vks import LabJackU3VoiceKeySignal as Signaler
      Begin Routine:
        # Create a voice-key to be used:
        vpvk = vk.OnsetVoiceKey(
            sec=2,
            file_out='data/trial_'+str(Practice.thisN).zfill(3)+'.wav')

        # Start it recording (and detecting):
          # non-blocking; don't block when using Builder
        vpvk.start()
      End Routine:
        # The recorded sound is saved upon .stop() by default. But
        # its a good idea to call .stop() explicitly, eg, if there's much slippage:

        vpvk.stop()

        # Add the detected time into the PsychoPy data file:
        thisExp.addData('vocal_RT', round(vpvk.event_onset, 3))
        thisExp.addData('bad_baseline', vpvk.bad_baseline)
        thisExp.addData('filename', vpvk.filename)
        thisExp.nextEntry()
  Routine trial
    TextComponent Stroop_Text_Full
      color [set every repeat] = $StroopColor
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $StroopText
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    CodeComponent voicekey_full
      Code Type = Py
      Begin Routine:
        # Create a voice-key to be used:
        vpvk = vk.OnsetVoiceKey(
            sec=2,
            file_out='data/trial_'+str(Trials.thisN).zfill(3)+'.wav')

        # Start it recording (and detecting):
          # non-blocking; don't block when using Builder
        vpvk.start()
      End Routine:
        # The recorded sound is saved upon .stop() by default. But
        # its a good idea to call .stop() explicitly, eg, if there's much slippage:

        vpvk.stop()

        # Add the detected time into the PsychoPy data file:
        thisExp.addData('vocal_RT', round(vpvk.event_onset, 3))
        thisExp.addData('bad_baseline', vpvk.bad_baseline)
        thisExp.addData('filename', vpvk.filename)
        thisExp.nextEntry()
Flow
  LoopInitiator Instructions loopType="TrialHandler"
    conditionsFile = SCWT_Instr.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('text', 'During this task, you will see one of three things:\n      1.  Colored asterisks\n      2.  Color names written with white letters\n      3.  Color names written with colored letters'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 1), ('text', 'If you see colored asterisks...\n\nSay the color.'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 2), ('text', 'If you see a color name written in white…\n\nRead the name.'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 3), ('text', 'But, if you see a color name written in color...\n\nSay the color that the word is written in. \n\nDO NOT read the word.'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 4), ('text', 'So, if you see "Red" written in Blue letters, \n\nSay "Blue".\nDo NOT say "Red".'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 5), ('text', '\n\nLet’s practice.'), ('cont_text', 'Press SPACE to begin.')])]
    Routine instr
  LoopTerminator Instructions
  LoopInitiator Practice loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = SCWT_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('StroopText', 'Orange'), ('StroopColor', 'white'), ('StroopCondition', 'Word'), ('correct', 'orange'), ('is_practice', 'yes'), ('practice_cue', '(Say "Orange")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 1), ('StroopText', 'Yellow'), ('StroopColor', 'green'), ('StroopCondition', 'CW'), ('correct', 'green'), ('is_practice', 'yes'), ('practice_cue', '(Say "Green")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 2), ('StroopText', '******'), ('StroopColor', 'purple'), ('StroopCondition', 'Color'), ('correct', 'purple'), ('is_practice', 'yes'), ('practice_cue', '(Say "Purple")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 3), ('StroopText', '*****'), ('StroopColor', 'green'), ('StroopCondition', 'Color'), ('correct', 'green'), ('is_practice', 'yes'), ('practice_cue', '(Say "Green")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 4), ('StroopText', 'Orange'), ('StroopColor', 'blue'), ('StroopCondition', 'CW'), ('correct', 'blue'), ('is_practice', 'yes'), ('practice_cue', '(Say "Blue")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 5), ('StroopText', 'Green'), ('StroopColor', 'purple'), ('StroopCondition', 'CW'), ('correct', 'purple'), ('is_practice', 'yes'), ('practice_cue', '(Say "Purple")'), ('practice_cont', 'Press SPACE to continue.')])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
    Routine fixation
    Routine prac_trial
  LoopTerminator Practice
  Routine full_instr
  LoopInitiator Trials loopType="TrialHandler"
    Selected rows = 6:77
    conditionsFile = SCWT_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('StroopText', 'Orange'), ('StroopColor', 'white'), ('StroopCondition', 'Word'), ('correct', 'orange'), ('is_practice', 'yes'), ('practice_cue', '(Say "Orange")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 1), ('StroopText', 'Yellow'), ('StroopColor', 'green'), ('StroopCondition', 'CW'), ('correct', 'green'), ('is_practice', 'yes'), ('practice_cue', '(Say "Green")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 2), ('StroopText', '******'), ('StroopColor', 'purple'), ('StroopCondition', 'Color'), ('correct', 'purple'), ('is_practice', 'yes'), ('practice_cue', '(Say "Purple")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 3), ('StroopText', '*****'), ('StroopColor', 'green'), ('StroopCondition', 'Color'), ('correct', 'green'), ('is_practice', 'yes'), ('practice_cue', '(Say "Green")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 4), ('StroopText', 'Orange'), ('StroopColor', 'blue'), ('StroopCondition', 'CW'), ('correct', 'blue'), ('is_practice', 'yes'), ('practice_cue', '(Say "Blue")'), ('practice_cont', 'Press SPACE to continue.')]),
      OrderedDict([('index', 5), ('StroopText', 'Green'), ('StroopColor', 'purple'), ('StroopCondition', 'CW'), ('correct', 'purple'), ('is_practice', 'yes'), ('practice_cue', '(Say "Purple")'), ('practice_cont', 'Press SPACE to continue.')])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
    Routine fixation
    Routine trial
  LoopTerminator Trials
  Routine thanks
